def model CardiovascularSystem as
    //   I     Imports
    //   II    Systemic
    //   III   Pulmonary
    //   IV    Heart
    //   V     Vessels output
    //   VI    Mapping components
    //   VII   Mapping terminal
    //   VIII  Vessels mapping
    //   IX    Output mapping
    //   X     Parameters mapping
    //   XI    Time mapping
    //   XII   Encapsulation

    //   Arteries = 74
    //   Veins = 66

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////////////// I - Imports /////////////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def import using "Units.cellml" for
        unit m3 using unit m3;
        unit m3_per_s using unit m3_per_s;
        unit m3_per_s2 using unit m3_per_s2;
        unit m6_per_J using unit m6_per_J;
        unit per_m using unit per_m;
        unit per_m3 using unit per_m3;
        unit J_per_m3 using unit J_per_m3;
        unit J_per_m6 using unit J_per_m6;
        unit J_s_per_m3 using unit J_s_per_m3;
        unit J_s_per_m6 using unit J_s_per_m6;
        unit J_s2_per_m5 using unit J_s2_per_m5;
        unit J_s2_per_m6 using unit J_s2_per_m6;
        unit J_s2_per_m9 using unit J_s2_per_m9;
        unit UnitValve using unit UnitValve;
    enddef;

    def import using "Parameters86.cellml" for
        comp Parameters_Systemic using comp Parameters_Systemic;
        comp Parameters_Pulmonary using comp Parameters_Pulmonary;
        comp Parameters_Heart using comp Parameters_Heart;
        comp Parameters_Venous using comp Parameters_Venous;
    enddef;

    ///// Aorta /////

    def import using "BG_Modules.cellml" for
        comp ascending_aorta_A_module using comp vv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ascending_aorta_B_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ascending_aorta_C_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ascending_aorta_D_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp aortic_arch_C2_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachiocephalic_trunk_C4_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp aortic_arch_C46_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp aortic_arch_C64_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp aortic_arch_C94_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp thoracic_aorta_C96_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp thoracic_aorta_C100_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp thoracic_aorta_C104_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp thoracic_aorta_C108_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp thoracic_aorta_C112_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C114_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp celiac_trunk_C116_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C136_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C164_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp renal_L166_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C176_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp renal_R178_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C188_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp abdominal_aorta_C192_module using comp pv_jII_type;
    enddef;

    ///// Lower Limbs /////

    def import using "BG_Modules.cellml" for
        comp common_iliac_R216_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_iliac_T1_R218_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_R220_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_R222_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp profundus_T2_R224_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_R226_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_R228_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp anterior_tibial_T3_R230_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_R232_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp tibiofibular_trunk_R234_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp posterior_tibial_T4_R236_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_iliac_L194_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_iliac_T1_L196_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_L198_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_L200_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp profundus_T2_L202_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_L204_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_L206_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp anterior_tibial_T3_L208_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_L210_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp tibiofibular_trunk_L212_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp posterior_tibial_T4_L214_module using comp pp_vBC_type;
    enddef;

    ///// Upper Limbs /////

    def import using "BG_Modules.cellml" for
        comp subclavian_R28_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_R30_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp axillary_R32_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_R34_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ulnar_T2_R36_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp radial_T1_R44_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_L66_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_L78_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp axillary_L80_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_L82_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ulnar_T2_L84_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp radial_T1_L92_module using comp pp_vBC_type;
    enddef;

    ///// Head /////

    def import using "BG_Modules.cellml" for
        comp common_carotid_R6_A_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_R6_B_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_R6_C_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_R8_A_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_R8_B_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_R8_C_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_carotid_T2_R26_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_L48_A_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_L48_B_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_L48_C_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_carotid_L48_D_module using comp pv_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_L50_A_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_L50_B_module using comp pv_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_carotid_L50_C_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_carotid_T2_L62_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp vertebral_L2_module using comp pp_vBC_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp vertebral_R272_module using comp pp_vBC_type;
    enddef;

    ///// Veins /////

    def import using "BG_Modules.cellml" for
        comp superior_vena_cava_C2_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp superior_vena_cava_C88_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp inferior_vena_cava_C8_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp hepatic_vein_T1_C10_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp inferior_vena_cava_C12_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp inferior_vena_cava_C16_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp renal_vein_T1_R18_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp inferior_vena_cava_C20_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp renal_vein_T1_L22_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp inferior_vena_cava_C24_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_iliac_vein_R26_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_vein_R28_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_iliac_vein_T1_R30_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_vein_R32_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_R34_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_R38_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp profunda_femoris_vein_T2_R40_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_R42_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_R46_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_vein_R48_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp anterior_tibial_vein_T4_R50_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_vein_R52_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp posterior_tibial_vein_T6_R54_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp common_iliac_vein_L56_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_vein_L58_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_iliac_vein_T1_L60_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_iliac_vein_L62_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_L64_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_L68_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp profunda_femoris_vein_T2_L70_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_L72_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp femoral_vein_L76_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_vein_L78_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp anterior_tibial_vein_T4_L80_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp popliteal_vein_L82_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp posterior_tibial_vein_T6_L84_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachiocephalic_vein_R90_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp vertebral_vein_R92_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachiocephalic_vein_R94_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_vein_R96_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_jugular_vein_R98_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_vein_R100_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp axillary_vein_R102_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_R104_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_R108_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ulnar_vein_T7_R110_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_R114_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_R118_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp radial_vein_T3_R120_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_jugular_vein_R122_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachiocephalic_vein_L124_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp vertebral_vein_L126_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachiocephalic_vein_L128_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_vein_L130_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp external_jugular_vein_L132_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp subclavian_vein_L134_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp axillary_vein_L136_module using comp vp_jII_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_L138_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_L142_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp ulnar_vein_T7_L144_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_L148_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp brachial_vein_L152_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp radial_vein_T3_L154_module using comp vp_type;
    enddef;

    def import using "BG_Modules.cellml" for
        comp internal_jugular_vein_L156_module using comp vp_type;
    enddef;

    def comp environment as
        var time: second {pub: out};
    enddef;

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////// II - Systemic Circulation ///////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def comp Systemic as
        var t: second {pub: in, priv: out};

        // State Variables

        var u_sas: J_per_m3 {pub: out, priv: in};
        var u_ra: J_per_m3 {pub: in, priv: out};
        var v_aov: m3_per_s {pub: in, priv: out};
        var v_sup_venacava: m3_per_s {pub: out, priv: in};
        var v_inf_venacava: m3_per_s {pub: out, priv: in};

        // Conservation Laws
    enddef;

    def map between internal_iliac_vein_T1_R30_module and internal_iliac_T1_R218_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between internal_iliac_vein_T1_L60_module and internal_iliac_T1_L196_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between profunda_femoris_vein_T2_R40_module and profundus_T2_R224_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between profunda_femoris_vein_T2_L70_module and profundus_T2_L202_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between anterior_tibial_vein_T4_L80_module and anterior_tibial_T3_L208_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between anterior_tibial_vein_T4_R50_module and anterior_tibial_T3_R230_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between posterior_tibial_vein_T6_L84_module and posterior_tibial_T4_L214_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between posterior_tibial_vein_T6_R54_module and posterior_tibial_T4_R236_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between radial_vein_T3_R120_module and radial_T1_R44_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between radial_vein_T3_L154_module and radial_T1_L92_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between ulnar_vein_T7_R110_module and ulnar_T2_R36_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between ulnar_vein_T7_L144_module and ulnar_T2_L84_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between vertebral_vein_R92_module and vertebral_R272_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between vertebral_vein_L126_module and vertebral_L2_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between internal_jugular_vein_R122_module and internal_carotid_R8_C_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between external_jugular_vein_R98_module and external_carotid_T2_R26_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between internal_jugular_vein_L156_module and internal_carotid_L50_C_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between external_jugular_vein_L132_module and external_carotid_T2_L62_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between hepatic_vein_T1_C10_module and celiac_trunk_C116_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between renal_vein_T1_L22_module and renal_L166_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    def map between renal_vein_T1_R18_module and renal_R178_module for
        vars u and u_out;
        vars v_in and v_T;
    enddef;

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////// III - Pulmonary Circulation /////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def comp Pulmonary as
        var t: second {pub: in};

        // Constitutive Parameters

        var C_pas: m6_per_J {priv: in};
        var C_pat: m6_per_J {priv: in};
        var C_par: m6_per_J {priv: in};
        var C_pcp: m6_per_J {priv: in};
        var C_pvn: m6_per_J {priv: in};
        var C_pvc: m6_per_J {priv: in};
        var R_pas: J_s_per_m6 {priv: in};
        var R_pat: J_s_per_m6 {priv: in};
        var R_par: J_s_per_m6 {priv: in};
        var R_pcp: J_s_per_m6 {priv: in};
        var R_psh: J_s_per_m6 {priv: in};
        var R_pvn: J_s_per_m6 {priv: in};
        var I_pas: J_s2_per_m6 {priv: in};
        var I_pat: J_s2_per_m6 {priv: in};
        var I_par: J_s2_per_m6 {priv: in};
        var I_pcp: J_s2_per_m6 {priv: in};
        var I_pvn: J_s2_per_m6 {priv: in};
        var I_psh: J_s2_per_m6 {priv: in};

        // State Variables

        var u_pas: J_per_m3 {init: 4000.0, pub: out};
        var u_pat: J_per_m3 {init: 0.0, pub: out};
        var u_par: J_per_m3 {init: 0.0, pub: out};
        var u_pcp: J_per_m3 {init: 0.0, pub: out};
        var u_pvn: J_per_m3 {init: 0.0, pub: out};
        var u_la: J_per_m3 {pub: in};
        var v_pas: m3_per_s {init: 0.0, pub: out};
        var v_pat: m3_per_s {init: 0.0, pub: out};
        var v_par: m3_per_s {init: 0.0, pub: out};
        var v_pcp: m3_per_s {init: 0.0, pub: out};
        var v_psh: m3_per_s {init: 0.0, pub: out};
        var v_pvn: m3_per_s {init: 0.0, pub: out};
        var v_puv: m3_per_s {pub: in};

        // Constitutive Relations

        ode(u_pas, t) = (v_puv-v_pas)/C_pas;
        ode(u_pat, t) = (v_pas-v_pat)/C_pat;
        ode(u_par, t) = (v_pat-v_psh-v_par)/C_par;
        ode(u_pcp, t) = (v_par-v_pcp)/C_pcp;
        ode(u_pvn, t) = (v_pcp+v_psh-v_pvn)/C_pvn;
        ode(v_pas, t) = (u_pas-u_pat-v_pas*R_pas)/I_pas;
        ode(v_pat, t) = (u_pat-u_par-v_pat*R_pat)/I_pat;
        ode(v_par, t) = (u_par-u_pcp-v_par*R_par)/I_par;
        ode(v_pcp, t) = (u_pcp-u_pvn-v_pcp*R_pcp)/I_pcp;
        ode(v_pvn, t) = (u_pvn-u_la-v_pvn*R_pvn)/I_pvn;
        ode(v_psh, t) = (u_par-u_pvn-v_psh*R_psh)/I_psh;
    enddef;

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////////////// IV - Heart //////////////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def comp Heart as
        var t: second {pub: in};

        // Constitutive Parameters

        var mt: second;
        var mta: second;
        var T: second {priv: in};
        var CQ_trv: UnitValve {priv: in};
        var CQ_puv: UnitValve {priv: in};
        var CQ_miv: UnitValve {priv: in};
        var CQ_aov: UnitValve {priv: in};
        var q_ra_0: m3 {priv: in};
        var q_rv_0: m3 {priv: in};
        var q_la_0: m3 {priv: in};
        var q_lv_0: m3 {priv: in};
        var E_lv_max: J_per_m6 {priv: in};
        var E_lv_min: J_per_m6 {priv: in};
        var E_la_max: J_per_m6 {priv: in};
        var E_la_min: J_per_m6 {priv: in};
        var E_rv_max: J_per_m6 {priv: in};
        var E_rv_min: J_per_m6 {priv: in};
        var E_ra_max: J_per_m6 {priv: in};
        var E_ra_min: J_per_m6 {priv: in};
        var tau_1_lv: dimensionless {priv: in};
        var tau_2_lv: dimensionless {priv: in};
        var tau_1_la: dimensionless {priv: in};
        var tau_2_la: dimensionless {priv: in};
        var tau_1_rv: dimensionless {priv: in};
        var tau_2_rv: dimensionless {priv: in};
        var tau_1_ra: dimensionless {priv: in};
        var tau_2_ra: dimensionless {priv: in};
        var m_1_lv: dimensionless {priv: in};
        var m_2_lv: dimensionless {priv: in};
        var m_1_la: dimensionless {priv: in};
        var m_2_la: dimensionless {priv: in};
        var m_1_rv: dimensionless {priv: in};
        var m_2_rv: dimensionless {priv: in};
        var m_1_ra: dimensionless {priv: in};
        var m_2_ra: dimensionless {priv: in};
        var g_1_lv: dimensionless;
        var g_2_lv: dimensionless;
        var g_1_la: dimensionless;
        var g_2_la: dimensionless;
        var g_1_rv: dimensionless;
        var g_2_rv: dimensionless;
        var g_1_ra: dimensionless;
        var g_2_ra: dimensionless;
        var t_onset_a: dimensionless {priv: in};
        var E_lv: J_per_m6;
        var E_la: J_per_m6;
        var E_rv: J_per_m6;
        var E_ra: J_per_m6;
        var H_la: dimensionless;
        var H_lv: dimensionless;
        var H_ra: dimensionless;
        var H_rv: dimensionless;

        // State Variables

        var u_ra: J_per_m3 {pub: out};
        var u_rv: J_per_m3;
        var u_la: J_per_m3 {pub: out};
        var u_lv: J_per_m3;
        var u_sas: J_per_m3 {pub: in};
        var u_par: J_per_m3 {pub: in};
        var v_trv: m3_per_s;
        var v_puv: m3_per_s {pub: out};
        var v_miv: m3_per_s;
        var v_aov: m3_per_s {pub: out};
        var v_sup_venacava: m3_per_s {pub: in};
        var v_inf_venacava: m3_per_s {pub: in};
        var v_pvn: m3_per_s {pub: in};

        //        var q_ra: m3 {init: 20.0e-6};
        //        var q_rv: m3 {init: 500.0e-6};
        //        var q_la: m3 {init: 20.0e-6};
        //        var q_lv: m3 {init: 500.0e-6};

        var q_lv: m3 {init: 600.0e-6};
        var q_rv: m3 {init: 600.0e-6};
        var q_la: m3 {init: 20.0e-6};
        var q_ra: m3 {init: 20.0e-6};

        H_lv = pow((tau_1_lv+tau_2_lv)/(tau_1_lv+tau_1_lv), m_1_lv)/(pow((tau_1_lv+tau_2_lv)/(tau_1_lv+tau_1_lv), m_1_lv)+1{dimensionless})*1{dimensionless}/(pow((tau_1_lv+tau_2_lv)/(tau_2_lv+tau_2_lv), m_2_lv)+1{dimensionless});
        H_la = pow((tau_1_la+tau_2_la)/(tau_1_la+tau_1_la), m_1_la)/(pow((tau_1_la+tau_2_la)/(tau_1_la+tau_1_la), m_1_la)+1{dimensionless})*1{dimensionless}/(pow((tau_1_la+tau_2_la)/(tau_2_la+tau_2_la), m_2_la)+1{dimensionless});
        H_rv = pow((tau_1_rv+tau_2_rv)/(tau_1_rv+tau_1_rv), m_1_rv)/(pow((tau_1_rv+tau_2_rv)/(tau_1_rv+tau_1_rv), m_1_rv)+1{dimensionless})*1{dimensionless}/(pow((tau_1_rv+tau_2_rv)/(tau_2_rv+tau_2_rv), m_2_rv)+1{dimensionless});
        H_ra = pow((tau_1_ra+tau_2_ra)/(tau_1_ra+tau_1_ra), m_1_ra)/(pow((tau_1_ra+tau_2_ra)/(tau_1_ra+tau_1_ra), m_1_ra)+1{dimensionless})*1{dimensionless}/(pow((tau_1_ra+tau_2_ra)/(tau_2_ra+tau_2_ra), m_2_ra)+1{dimensionless});
        E_lv = (E_lv_max-E_lv_min)*g_1_lv/((g_1_lv+1{dimensionless})*(g_2_lv+1{dimensionless})*H_lv)+E_lv_min;
        g_1_lv = pow(mt/(tau_1_lv*T), m_1_lv);
        g_2_lv = pow(mt/(tau_2_lv*T), m_2_lv);
        E_la = (E_la_max-E_la_min)*g_1_la/((g_1_la+1{dimensionless})*(g_2_la+1{dimensionless})*H_la)+E_la_min;
        g_1_la = pow(mta/(tau_1_la*T), m_1_la);
        g_2_la = pow(mta/(tau_2_la*T), m_2_la);
        E_rv = (E_rv_max-E_rv_min)*g_1_rv/((g_1_rv+1{dimensionless})*(g_2_rv+1{dimensionless})*H_rv)+E_rv_min;
        g_1_rv = pow(mt/(tau_1_rv*T), m_1_rv);
        g_2_rv = pow(mt/(tau_2_rv*T), m_2_rv);
        E_ra = (E_ra_max-E_ra_min)*g_1_ra/((g_1_ra+1{dimensionless})*(g_2_ra+1{dimensionless})*H_ra)+E_ra_min;
        g_1_ra = pow(mta/(tau_1_ra*T), m_1_ra);
        g_2_ra = pow(mta/(tau_2_ra*T), m_2_ra);

        // Elastance Functions

        mt = t-T*floor(t/T);
        mta = t-t_onset_a*T-T*floor((t-t_onset_a*T)/T);

        // Constitutive Relations

        v_trv = sel
            case u_ra >= u_rv:
                CQ_trv*sqrt(u_ra-u_rv);
            case u_ra < u_rv:
                0.0{m3_per_s};
        endsel;

        v_puv = sel
            case u_rv >= u_par:
                CQ_puv*sqrt(u_rv-u_par);
            case u_rv < u_par:
                0.0{m3_per_s};
        endsel;

        v_miv = sel
            case u_la >= u_lv:
                CQ_miv*sqrt(u_la-u_lv);
            case u_la < u_lv:
                0.0{m3_per_s};
        endsel;

        v_aov = sel
            case u_lv >= u_sas:
                CQ_aov*sqrt(u_lv-u_sas);
            case u_lv < u_sas:
                0.0{m3_per_s};
        endsel;

        u_ra = E_ra*(q_ra-q_ra_0);
        u_rv = E_rv*(q_rv-q_rv_0);
        u_la = E_la*(q_la-q_la_0);
        u_lv = E_lv*(q_lv-q_lv_0);

        // Conservation Laws

        ode(q_ra, t) = v_sup_venacava+v_inf_venacava-v_trv;
        ode(q_rv, t) = v_trv-v_puv;
        ode(q_la, t) = v_pvn-v_miv;
        ode(q_lv, t) = v_miv-v_aov;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////// V - Vessels Output ///////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    // Aorta

    def comp ascending_aorta_A as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ascending_aorta_B as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ascending_aorta_C as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ascending_aorta_D as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp aortic_arch_C2 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachiocephalic_trunk_C4 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp aortic_arch_C46 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp aortic_arch_C64 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp aortic_arch_C94 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp thoracic_aorta_C96 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp thoracic_aorta_C100 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp thoracic_aorta_C104 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp thoracic_aorta_C108 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp thoracic_aorta_C112 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C114 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C136 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C164 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C176 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C188 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp abdominal_aorta_C192 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    // Trunk

    def comp celiac_trunk_C116 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp renal_L166 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp renal_R178 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    // Lower Limbs

    def comp common_iliac_R216 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_iliac_T1_R218 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_R220 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_R222 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp profundus_T2_R224 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_R226 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_R228 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp anterior_tibial_T3_R230 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_R232 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp tibiofibular_trunk_R234 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp posterior_tibial_T4_R236 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_iliac_L194 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_iliac_T1_L196 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_L198 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_L200 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp profundus_T2_L202 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_L204 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_L206 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp anterior_tibial_T3_L208 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_L210 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp tibiofibular_trunk_L212 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp posterior_tibial_T4_L214 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    // Upper Limbs

    def comp subclavian_R28 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_R30 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp axillary_R32 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_R34 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ulnar_T2_R36 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp radial_T1_R44 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_L66 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_L78 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp axillary_L80 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_L82 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ulnar_T2_L84 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp radial_T1_L92 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    // Head

    def comp common_carotid_R6_A as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_R6_B as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_R6_C as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_R8_A as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_R8_B as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_R8_C as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_carotid_T2_R26 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_L48_A as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_L48_B as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_L48_C as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_carotid_L48_D as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_L50_A as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_L50_B as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_carotid_L50_C as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_carotid_T2_L62 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp vertebral_L2 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp vertebral_R272 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    ///////

    def comp superior_vena_cava_C2 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp superior_vena_cava_C88 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp inferior_vena_cava_C8 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp inferior_vena_cava_C12 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp hepatic_vein_T1_C10 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp inferior_vena_cava_C16 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp renal_vein_T1_R18 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp inferior_vena_cava_C20 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp renal_vein_T1_L22 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp inferior_vena_cava_C24 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_iliac_vein_L56 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp common_iliac_vein_R26 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_vein_R28 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_iliac_vein_T1_R30 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_vein_R32 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_R34 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_R38 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp profunda_femoris_vein_T2_R40 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_R42 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_R46 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_vein_R48 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp anterior_tibial_vein_T4_R50 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_vein_R52 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp posterior_tibial_vein_T6_R54 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_vein_L58 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_iliac_vein_T1_L60 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_iliac_vein_L62 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_L64 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_L68 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp profunda_femoris_vein_T2_L70 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_L72 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp femoral_vein_L76 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_vein_L78 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp anterior_tibial_vein_T4_L80 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp popliteal_vein_L82 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp posterior_tibial_vein_T6_L84 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachiocephalic_vein_R90 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachiocephalic_vein_L124 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp vertebral_vein_R92 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachiocephalic_vein_R94 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_vein_R96 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_jugular_vein_R122 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_jugular_vein_R98 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_vein_R100 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp axillary_vein_R102 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_R104 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_R114 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_R108 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ulnar_vein_T7_R110 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_R118 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp radial_vein_T3_R120 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp vertebral_vein_L126 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachiocephalic_vein_L128 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_vein_L130 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp internal_jugular_vein_L156 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp external_jugular_vein_L132 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp subclavian_vein_L134 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp axillary_vein_L136 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_L138 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_L148 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_L142 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp ulnar_vein_T7_L144 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp brachial_vein_L152 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    def comp radial_vein_T3_L154 as
        var u: J_per_m3 {pub: in};
        var v: m3_per_s {pub: in};
        var E: J_per_m3 {pub: in};
        var r: metre {pub: in};
        var h: metre {pub: in};
        var l: metre {pub: in};
    enddef;

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    /////////////////////////////////////////// VI - Mapping Components ///////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def map between Heart and Systemic for
        vars v_sup_venacava and v_sup_venacava;
        vars v_inf_venacava and v_inf_venacava;
        vars u_ra and u_ra;
        vars u_sas and u_sas;
        vars v_aov and v_aov;
    enddef;

    def map between Heart and Pulmonary for
        vars u_par and u_pas;
        vars v_pvn and v_pvn;
        vars u_la and u_la;
        vars v_puv and v_puv;
    enddef;

    ///// Parameters /////

    def map between Parameters_Pulmonary and Pulmonary for
        vars C_pas and C_pas;
        vars C_pat and C_pat;
        vars C_par and C_par;
        vars C_pcp and C_pcp;
        vars C_pvn and C_pvn;
        vars C_pvc and C_pvc;
        vars R_pas and R_pas;
        vars R_pat and R_pat;
        vars R_par and R_par;
        vars R_pcp and R_pcp;
        vars R_psh and R_psh;
        vars R_pvn and R_pvn;
        vars I_pas and I_pas;
        vars I_pat and I_pat;
        vars I_par and I_par;
        vars I_pcp and I_pcp;
        vars I_pvn and I_pvn;
        vars I_psh and I_psh;
    enddef;

    def map between Parameters_Heart and Heart for
        vars T and T;
        vars CQ_trv and CQ_trv;
        vars CQ_puv and CQ_puv;
        vars CQ_miv and CQ_miv;
        vars CQ_aov and CQ_aov;
        vars E_lv_max and E_lv_max;
        vars E_lv_min and E_lv_min;
        vars E_la_max and E_la_max;
        vars E_la_min and E_la_min;
        vars E_rv_max and E_rv_max;
        vars E_rv_min and E_rv_min;
        vars E_ra_max and E_ra_max;
        vars E_ra_min and E_ra_min;
        vars tau_1_lv and tau_1_lv;
        vars tau_2_lv and tau_2_lv;
        vars tau_1_la and tau_1_la;
        vars tau_2_la and tau_2_la;
        vars tau_1_rv and tau_1_rv;
        vars tau_2_rv and tau_2_rv;
        vars tau_1_ra and tau_1_ra;
        vars tau_2_ra and tau_2_ra;
        vars m_1_lv and m_1_lv;
        vars m_2_lv and m_2_lv;
        vars m_1_la and m_1_la;
        vars m_2_la and m_2_la;
        vars m_1_rv and m_1_rv;
        vars m_2_rv and m_2_rv;
        vars m_1_ra and m_1_ra;
        vars m_2_ra and m_2_ra;
        vars t_onset_a and t_onset_a;
        vars q_ra_0 and q_ra_0;
        vars q_rv_0 and q_rv_0;
        vars q_la_0 and q_la_0;
        vars q_lv_0 and q_lv_0;
    enddef;

    ///// Environment /////

    def map between environment and Heart for
        vars time and t;
    enddef;

    def map between environment and Systemic for
        vars time and t;
    enddef;

    def map between environment and Pulmonary for
        vars time and t;
    enddef;

    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////
    /////////////////////////////////////////// VI - Mapping Terminals ////////////////////////////////////////////
    ///////////////////////////////////////////////////////////////////////////////////////////////////////////////

    def map between Systemic and celiac_trunk_C116_module for
        vars t and t;
    enddef;

    def map between Systemic and renal_L166_module for
        vars t and t;
    enddef;

    def map between Systemic and renal_R178_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_iliac_T1_R218_module for
        vars t and t;
    enddef;

    def map between Systemic and profundus_T2_R224_module for
        vars t and t;
    enddef;

    def map between Systemic and anterior_tibial_T3_R230_module for
        vars t and t;
    enddef;

    def map between Systemic and posterior_tibial_T4_R236_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_iliac_T1_L196_module for
        vars t and t;
    enddef;

    def map between Systemic and profundus_T2_L202_module for
        vars t and t;
    enddef;

    def map between Systemic and anterior_tibial_T3_L208_module for
        vars t and t;
    enddef;

    def map between Systemic and posterior_tibial_T4_L214_module for
        vars t and t;
    enddef;

    def map between Systemic and radial_T1_R44_module for
        vars t and t;
    enddef;

    def map between Systemic and radial_T1_L92_module for
        vars t and t;
    enddef;

    def map between Systemic and external_carotid_T2_R26_module for
        vars t and t;
    enddef;

    def map between Systemic and external_carotid_T2_L62_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_R8_C_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_L50_C_module for
        vars t and t;
    enddef;

    def map between Systemic and vertebral_R272_module for
        vars t and t;
    enddef;

    def map between Systemic and vertebral_L2_module for
        vars t and t;
    enddef;

    ///// Vein /////

    def map between Systemic and renal_vein_T1_R18_module for
        vars t and t;
    enddef;

    def map between Systemic and renal_vein_T1_L22_module for
        vars t and t;
    enddef;

    def map between Systemic and hepatic_vein_T1_C10_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_iliac_vein_T1_R30_module for
        vars t and t;
    enddef;

    def map between Systemic and profunda_femoris_vein_T2_R40_module for
        vars t and t;
    enddef;

    def map between Systemic and anterior_tibial_vein_T4_R50_module for
        vars t and t;
    enddef;

    def map between Systemic and posterior_tibial_vein_T6_R54_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_iliac_vein_T1_L60_module for
        vars t and t;
    enddef;

    def map between Systemic and profunda_femoris_vein_T2_L70_module for
        vars t and t;
    enddef;

    def map between Systemic and anterior_tibial_vein_T4_L80_module for
        vars t and t;
    enddef;

    def map between Systemic and posterior_tibial_vein_T6_L84_module for
        vars t and t;
    enddef;

    def map between Systemic and vertebral_vein_R92_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_jugular_vein_R122_module for
        vars t and t;
    enddef;

    def map between Systemic and external_jugular_vein_R98_module for
        vars t and t;
    enddef;

    def map between Systemic and ulnar_vein_T7_R110_module for
        vars t and t;
    enddef;

    def map between Systemic and radial_vein_T3_R120_module for
        vars t and t;
    enddef;

    def map between Systemic and vertebral_vein_L126_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_jugular_vein_L156_module for
        vars t and t;
    enddef;

    def map between Systemic and external_jugular_vein_L132_module for
        vars t and t;
    enddef;

    def map between Systemic and ulnar_vein_T7_L144_module for
        vars t and t;
    enddef;

    def map between Systemic and radial_vein_T3_L154_module for
        vars t and t;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    //////////////////////////////////////// VIII - Vessels Mapping ////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    // Connecting Arteries Junctions

    def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C2_module and aortic_arch_C46_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C46_module and aortic_arch_C64_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C46_module and common_carotid_L48_A_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C64_module and aortic_arch_C94_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C64_module and subclavian_L66_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C114_module and celiac_trunk_C116_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C164_module and renal_L166_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C176_module and renal_R178_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C192_module and common_iliac_R216_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between abdominal_aorta_C192_module and common_iliac_L194_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between common_iliac_R216_module and internal_iliac_T1_R218_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between common_iliac_R216_module and external_iliac_R220_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between femoral_R222_module and profundus_T2_R224_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between femoral_R222_module and femoral_R226_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between popliteal_R228_module and anterior_tibial_T3_R230_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between popliteal_R228_module and popliteal_R232_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between common_iliac_L194_module and internal_iliac_T1_L196_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between common_iliac_L194_module and external_iliac_L198_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between femoral_L200_module and profundus_T2_L202_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between femoral_L200_module and femoral_L204_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between popliteal_L206_module and anterior_tibial_T3_L208_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between popliteal_L206_module and popliteal_L210_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between subclavian_R28_module and subclavian_R30_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between subclavian_R28_module and vertebral_R272_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between brachial_R34_module and ulnar_T2_R36_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between brachial_R34_module and radial_T1_R44_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between subclavian_L66_module and subclavian_L78_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between subclavian_L66_module and vertebral_L2_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between brachial_L82_module and ulnar_T2_L84_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between brachial_L82_module and radial_T1_L92_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_R6_C_module and external_carotid_T2_R26_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
        vars v_out_1 and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_L48_D_module and external_carotid_T2_L62_module for
        vars v_out_2 and v;
        vars u and u_in;
    enddef;

    // Connecting Aorta & Trunk

    def map between ascending_aorta_A_module and ascending_aorta_B_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between ascending_aorta_B_module and ascending_aorta_C_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between ascending_aorta_C_module and ascending_aorta_D_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between ascending_aorta_D_module and aortic_arch_C2_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    // Connecting Arteries in Lower Limb

    def map between external_iliac_R220_module and femoral_R222_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between femoral_R226_module and popliteal_R228_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between popliteal_R232_module and tibiofibular_trunk_R234_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between tibiofibular_trunk_R234_module and posterior_tibial_T4_R236_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between external_iliac_L198_module and femoral_L200_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between femoral_L204_module and popliteal_L206_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between popliteal_L210_module and tibiofibular_trunk_L212_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between tibiofibular_trunk_L212_module and posterior_tibial_T4_L214_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    // Connecting Arteries in Upper Limb

    def map between subclavian_R30_module and axillary_R32_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between axillary_R32_module and brachial_R34_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between subclavian_L78_module and axillary_L80_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between axillary_L80_module and brachial_L82_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    // Connecting Arteries in Head

    def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
        vars v_out and v;
        vars u and u_in;
    enddef;

    // Connecting Vein Junctions in Upper Body

    def map between superior_vena_cava_C2_module and superior_vena_cava_C88_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between superior_vena_cava_C88_module and brachiocephalic_vein_R90_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between superior_vena_cava_C88_module and brachiocephalic_vein_L124_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_R90_module and vertebral_vein_R92_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_R90_module and brachiocephalic_vein_R94_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_R94_module and subclavian_vein_R96_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_R94_module and internal_jugular_vein_R122_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_R96_module and external_jugular_vein_R98_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_R96_module and subclavian_vein_R100_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between axillary_vein_R102_module and brachial_vein_R104_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between axillary_vein_R102_module and brachial_vein_R114_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_R108_module and ulnar_vein_T7_R110_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_L124_module and vertebral_vein_L126_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_L124_module and brachiocephalic_vein_L128_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_L128_module and subclavian_vein_L130_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between brachiocephalic_vein_L128_module and internal_jugular_vein_L156_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_L130_module and external_jugular_vein_L132_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_L130_module and subclavian_vein_L134_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between axillary_vein_L136_module and brachial_vein_L138_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between axillary_vein_L136_module and brachial_vein_L148_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_L142_module and ulnar_vein_T7_L144_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    // Connecting Vein Junctions in Lower body

    def map between inferior_vena_cava_C8_module and hepatic_vein_T1_C10_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C8_module and inferior_vena_cava_C12_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C16_module and renal_vein_T1_R18_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C16_module and inferior_vena_cava_C20_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C20_module and renal_vein_T1_L22_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C20_module and inferior_vena_cava_C24_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C24_module and common_iliac_vein_R26_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C24_module and common_iliac_vein_L56_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_R28_module and internal_iliac_vein_T1_R30_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_R28_module and external_iliac_vein_R32_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_R34_module and femoral_vein_R38_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_R38_module and profunda_femoris_vein_T2_R40_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_R38_module and femoral_vein_R42_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_R48_module and anterior_tibial_vein_T4_R50_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_R48_module and popliteal_vein_R52_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_L58_module and internal_iliac_vein_T1_L60_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_L58_module and external_iliac_vein_L62_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_L64_module and femoral_vein_L68_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_L68_module and profunda_femoris_vein_T2_L70_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_L68_module and femoral_vein_L72_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_L78_module and anterior_tibial_vein_T4_L80_module for
        vars v_in_1 and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_L78_module and popliteal_vein_L82_module for
        vars v_in_2 and v;
        vars u and u_out;
    enddef;

    // Conncecting Straight Veins

    def map between brachial_vein_R114_module and brachial_vein_R118_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_R104_module and brachial_vein_R108_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_L138_module and brachial_vein_L142_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_L148_module and brachial_vein_L152_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between inferior_vena_cava_C12_module and inferior_vena_cava_C16_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_R100_module and axillary_vein_R102_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_R118_module and radial_vein_T3_R120_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between subclavian_vein_L134_module and axillary_vein_L136_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between brachial_vein_L152_module and radial_vein_T3_L154_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between common_iliac_vein_R26_module and external_iliac_vein_R28_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_R32_module and femoral_vein_R34_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_R46_module and popliteal_vein_R48_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_R52_module and posterior_tibial_vein_T6_R54_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between common_iliac_vein_L56_module and external_iliac_vein_L58_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between external_iliac_vein_L62_module and femoral_vein_L64_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_L76_module and popliteal_vein_L78_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between popliteal_vein_L82_module and posterior_tibial_vein_T6_L84_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_R42_module and femoral_vein_R46_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    def map between femoral_vein_L72_module and femoral_vein_L76_module for
        vars v_in and v;
        vars u and u_out;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////// IX - Output Mapping //////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    // Aorta

    def map between ascending_aorta_A and ascending_aorta_A_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ascending_aorta_B and ascending_aorta_B_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ascending_aorta_C and ascending_aorta_C_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ascending_aorta_D and ascending_aorta_D_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between aortic_arch_C2 and aortic_arch_C2_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachiocephalic_trunk_C4 and brachiocephalic_trunk_C4_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between aortic_arch_C46 and aortic_arch_C46_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between aortic_arch_C64 and aortic_arch_C64_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between aortic_arch_C94 and aortic_arch_C94_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between thoracic_aorta_C96 and thoracic_aorta_C96_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between thoracic_aorta_C100 and thoracic_aorta_C100_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between thoracic_aorta_C104 and thoracic_aorta_C104_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between thoracic_aorta_C108 and thoracic_aorta_C108_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between thoracic_aorta_C112 and thoracic_aorta_C112_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C114 and abdominal_aorta_C114_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C136 and abdominal_aorta_C136_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C164 and abdominal_aorta_C164_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C176 and abdominal_aorta_C176_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C188 and abdominal_aorta_C188_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between abdominal_aorta_C192 and abdominal_aorta_C192_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    // Trunk

    def map between celiac_trunk_C116 and celiac_trunk_C116_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between renal_L166 and renal_L166_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between renal_R178 and renal_R178_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    // Lower Limbs

    def map between common_iliac_R216 and common_iliac_R216_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_iliac_T1_R218 and internal_iliac_T1_R218_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_R220 and external_iliac_R220_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_R222 and femoral_R222_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between profundus_T2_R224 and profundus_T2_R224_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_R226 and femoral_R226_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_R228 and popliteal_R228_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between anterior_tibial_T3_R230 and anterior_tibial_T3_R230_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_R232 and popliteal_R232_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between tibiofibular_trunk_R234 and tibiofibular_trunk_R234_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between posterior_tibial_T4_R236 and posterior_tibial_T4_R236_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_iliac_L194 and common_iliac_L194_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_iliac_T1_L196 and internal_iliac_T1_L196_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_L198 and external_iliac_L198_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_L200 and femoral_L200_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between profundus_T2_L202 and profundus_T2_L202_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_L204 and femoral_L204_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_L206 and popliteal_L206_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between anterior_tibial_T3_L208 and anterior_tibial_T3_L208_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_L210 and popliteal_L210_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between tibiofibular_trunk_L212 and tibiofibular_trunk_L212_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between posterior_tibial_T4_L214 and posterior_tibial_T4_L214_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    // Upper Limbs

    def map between subclavian_R28 and subclavian_R28_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_R30 and subclavian_R30_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between axillary_R32 and axillary_R32_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_R34 and brachial_R34_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ulnar_T2_R36 and ulnar_T2_R36_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between radial_T1_R44 and radial_T1_R44_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_L66 and subclavian_L66_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_L78 and subclavian_L78_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between axillary_L80 and axillary_L80_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_L82 and brachial_L82_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ulnar_T2_L84 and ulnar_T2_L84_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between radial_T1_L92 and radial_T1_L92_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    // Head

    def map between common_carotid_R6_A and common_carotid_R6_A_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_R6_B and common_carotid_R6_B_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_R6_C and common_carotid_R6_C_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_R8_A and internal_carotid_R8_A_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_R8_B and internal_carotid_R8_B_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_R8_C and internal_carotid_R8_C_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_carotid_T2_R26 and external_carotid_T2_R26_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_L48_A and common_carotid_L48_A_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_L48_B and common_carotid_L48_B_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_L48_C and common_carotid_L48_C_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_carotid_L48_D and common_carotid_L48_D_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_L50_A and internal_carotid_L50_A_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_L50_B and internal_carotid_L50_B_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_carotid_L50_C and internal_carotid_L50_C_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_carotid_T2_L62 and external_carotid_T2_L62_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between vertebral_L2 and vertebral_L2_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between vertebral_R272 and vertebral_R272_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    // Veins

    def map between superior_vena_cava_C2 and superior_vena_cava_C2_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between superior_vena_cava_C88 and superior_vena_cava_C88_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between inferior_vena_cava_C8 and inferior_vena_cava_C8_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between hepatic_vein_T1_C10 and hepatic_vein_T1_C10_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between inferior_vena_cava_C12 and inferior_vena_cava_C12_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between inferior_vena_cava_C16 and inferior_vena_cava_C16_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between renal_vein_T1_R18 and renal_vein_T1_R18_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between inferior_vena_cava_C20 and inferior_vena_cava_C20_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between renal_vein_T1_L22 and renal_vein_T1_L22_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between inferior_vena_cava_C24 and inferior_vena_cava_C24_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_iliac_vein_R26 and common_iliac_vein_R26_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_vein_R28 and external_iliac_vein_R28_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_iliac_vein_T1_R30 and internal_iliac_vein_T1_R30_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_vein_R32 and external_iliac_vein_R32_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_R34 and femoral_vein_R34_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_R38 and femoral_vein_R38_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between profunda_femoris_vein_T2_R40 and profunda_femoris_vein_T2_R40_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_R42 and femoral_vein_R42_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_R46 and femoral_vein_R46_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_vein_R48 and popliteal_vein_R48_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between anterior_tibial_vein_T4_R50 and anterior_tibial_vein_T4_R50_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_vein_R52 and popliteal_vein_R52_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between posterior_tibial_vein_T6_R54 and posterior_tibial_vein_T6_R54_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between common_iliac_vein_L56 and common_iliac_vein_L56_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_vein_L58 and external_iliac_vein_L58_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_iliac_vein_T1_L60 and internal_iliac_vein_T1_L60_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_iliac_vein_L62 and external_iliac_vein_L62_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_L64 and femoral_vein_L64_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_L68 and femoral_vein_L68_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between profunda_femoris_vein_T2_L70 and profunda_femoris_vein_T2_L70_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_L72 and femoral_vein_L72_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between femoral_vein_L76 and femoral_vein_L76_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_vein_L78 and popliteal_vein_L78_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between anterior_tibial_vein_T4_L80 and anterior_tibial_vein_T4_L80_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between popliteal_vein_L82 and popliteal_vein_L82_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between posterior_tibial_vein_T6_L84 and posterior_tibial_vein_T6_L84_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachiocephalic_vein_R90 and brachiocephalic_vein_R90_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between vertebral_vein_R92 and vertebral_vein_R92_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachiocephalic_vein_R94 and brachiocephalic_vein_R94_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_vein_R96 and subclavian_vein_R96_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_jugular_vein_R98 and external_jugular_vein_R98_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_vein_R100 and subclavian_vein_R100_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between axillary_vein_R102 and axillary_vein_R102_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_R104 and brachial_vein_R104_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_R108 and brachial_vein_R108_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ulnar_vein_T7_R110 and ulnar_vein_T7_R110_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_R114 and brachial_vein_R114_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_R118 and brachial_vein_R118_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between radial_vein_T3_R120 and radial_vein_T3_R120_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_jugular_vein_R122 and internal_jugular_vein_R122_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachiocephalic_vein_L124 and brachiocephalic_vein_L124_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between vertebral_vein_L126 and vertebral_vein_L126_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachiocephalic_vein_L128 and brachiocephalic_vein_L128_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_vein_L130 and subclavian_vein_L130_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between external_jugular_vein_L132 and external_jugular_vein_L132_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between subclavian_vein_L134 and subclavian_vein_L134_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between axillary_vein_L136 and axillary_vein_L136_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_L138 and brachial_vein_L138_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_L142 and brachial_vein_L142_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between ulnar_vein_T7_L144 and ulnar_vein_T7_L144_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_L152 and brachial_vein_L152_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between brachial_vein_L148 and brachial_vein_L148_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between radial_vein_T3_L154 and radial_vein_T3_L154_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    def map between internal_jugular_vein_L156 and internal_jugular_vein_L156_module for
        vars u and u;
        vars v and v;
        vars E and E_m;
        vars r and radius;
        vars h and thickness;
        vars l and length;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    //////////////////////////////////////// X - Parameters Mapping ////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    // Aorta

    def map between Parameters_Systemic and ascending_aorta_A_module for
        vars l_ascending_aorta_A and l;
        vars E_ascending_aorta_A and E;
        vars r_ascending_aorta_A and r;
    enddef;

    def map between Parameters_Systemic and ascending_aorta_B_module for
        vars l_ascending_aorta_B and l;
        vars E_ascending_aorta_B and E;
        vars r_ascending_aorta_B and r;
    enddef;

    def map between Parameters_Systemic and ascending_aorta_C_module for
        vars l_ascending_aorta_C and l;
        vars E_ascending_aorta_C and E;
        vars r_ascending_aorta_C and r;
    enddef;

    def map between Parameters_Systemic and ascending_aorta_D_module for
        vars l_ascending_aorta_D and l;
        vars E_ascending_aorta_D and E;
        vars r_ascending_aorta_D and r;
    enddef;

    def map between Parameters_Systemic and aortic_arch_C2_module for
        vars l_aortic_arch_C2 and l;
        vars E_aortic_arch_C2 and E;
        vars r_aortic_arch_C2 and r;
    enddef;

    def map between Parameters_Systemic and brachiocephalic_trunk_C4_module for
        vars l_brachiocephalic_trunk_C4 and l;
        vars E_brachiocephalic_trunk_C4 and E;
        vars r_brachiocephalic_trunk_C4 and r;
    enddef;

    def map between Parameters_Systemic and aortic_arch_C46_module for
        vars l_aortic_arch_C46 and l;
        vars E_aortic_arch_C46 and E;
        vars r_aortic_arch_C46 and r;
    enddef;

    def map between Parameters_Systemic and aortic_arch_C64_module for
        vars l_aortic_arch_C64 and l;
        vars E_aortic_arch_C64 and E;
        vars r_aortic_arch_C64 and r;
    enddef;

    def map between Parameters_Systemic and aortic_arch_C94_module for
        vars l_aortic_arch_C94 and l;
        vars E_aortic_arch_C94 and E;
        vars r_aortic_arch_C94 and r;
    enddef;

    def map between Parameters_Systemic and thoracic_aorta_C96_module for
        vars l_thoracic_aorta_C96 and l;
        vars E_thoracic_aorta_C96 and E;
        vars r_thoracic_aorta_C96 and r;
    enddef;

    def map between Parameters_Systemic and thoracic_aorta_C100_module for
        vars l_thoracic_aorta_C100 and l;
        vars E_thoracic_aorta_C100 and E;
        vars r_thoracic_aorta_C100 and r;
    enddef;

    def map between Parameters_Systemic and thoracic_aorta_C104_module for
        vars l_thoracic_aorta_C104 and l;
        vars E_thoracic_aorta_C104 and E;
        vars r_thoracic_aorta_C104 and r;
    enddef;

    def map between Parameters_Systemic and thoracic_aorta_C108_module for
        vars l_thoracic_aorta_C108 and l;
        vars E_thoracic_aorta_C108 and E;
        vars r_thoracic_aorta_C108 and r;
    enddef;

    def map between Parameters_Systemic and thoracic_aorta_C112_module for
        vars l_thoracic_aorta_C112 and l;
        vars E_thoracic_aorta_C112 and E;
        vars r_thoracic_aorta_C112 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C114_module for
        vars l_abdominal_aorta_C114 and l;
        vars E_abdominal_aorta_C114 and E;
        vars r_abdominal_aorta_C114 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C136_module for
        vars l_abdominal_aorta_C136 and l;
        vars E_abdominal_aorta_C136 and E;
        vars r_abdominal_aorta_C136 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C164_module for
        vars l_abdominal_aorta_C164 and l;
        vars E_abdominal_aorta_C164 and E;
        vars r_abdominal_aorta_C164 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C176_module for
        vars l_abdominal_aorta_C176 and l;
        vars E_abdominal_aorta_C176 and E;
        vars r_abdominal_aorta_C176 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C188_module for
        vars l_abdominal_aorta_C188 and l;
        vars E_abdominal_aorta_C188 and E;
        vars r_abdominal_aorta_C188 and r;
    enddef;

    def map between Parameters_Systemic and abdominal_aorta_C192_module for
        vars l_abdominal_aorta_C192 and l;
        vars E_abdominal_aorta_C192 and E;
        vars r_abdominal_aorta_C192 and r;
    enddef;

    // Trunk

    def map between Parameters_Systemic and celiac_trunk_C116_module for
        vars l_celiac_trunk_C116 and l;
        vars E_celiac_trunk_C116 and E;
        vars r_celiac_trunk_C116 and r;
        vars R_T_celiac_trunk_C116 and R_T;
        vars C_T_celiac_trunk_C116 and C_T;
    enddef;

    def map between Parameters_Systemic and renal_L166_module for
        vars l_renal_L166 and l;
        vars E_renal_L166 and E;
        vars r_renal_L166 and r;
        vars R_T_renal_L166 and R_T;
        vars C_T_renal_L166 and C_T;
    enddef;

    def map between Parameters_Systemic and renal_R178_module for
        vars l_renal_R178 and l;
        vars E_renal_R178 and E;
        vars r_renal_R178 and r;
        vars R_T_renal_R178 and R_T;
        vars C_T_renal_R178 and C_T;
    enddef;

    // Lower Limbs

    def map between Parameters_Systemic and common_iliac_R216_module for
        vars l_common_iliac_R216 and l;
        vars E_common_iliac_R216 and E;
        vars r_common_iliac_R216 and r;
    enddef;

    def map between Parameters_Systemic and external_iliac_R220_module for
        vars l_external_iliac_R220 and l;
        vars E_external_iliac_R220 and E;
        vars r_external_iliac_R220 and r;
    enddef;

    def map between Parameters_Systemic and femoral_R222_module for
        vars l_femoral_R222 and l;
        vars E_femoral_R222 and E;
        vars r_femoral_R222 and r;
    enddef;

    def map between Parameters_Systemic and femoral_R226_module for
        vars l_femoral_R226 and l;
        vars E_femoral_R226 and E;
        vars r_femoral_R226 and r;
    enddef;

    def map between Parameters_Systemic and popliteal_R228_module for
        vars l_popliteal_R228 and l;
        vars E_popliteal_R228 and E;
        vars r_popliteal_R228 and r;
    enddef;

    def map between Parameters_Systemic and popliteal_R232_module for
        vars l_popliteal_R232 and l;
        vars E_popliteal_R232 and E;
        vars r_popliteal_R232 and r;
    enddef;

    def map between Parameters_Systemic and tibiofibular_trunk_R234_module for
        vars l_tibiofibular_trunk_R234 and l;
        vars E_tibiofibular_trunk_R234 and E;
        vars r_tibiofibular_trunk_R234 and r;
    enddef;

    def map between Parameters_Systemic and common_iliac_L194_module for
        vars l_common_iliac_L194 and l;
        vars E_common_iliac_L194 and E;
        vars r_common_iliac_L194 and r;
    enddef;

    def map between Parameters_Systemic and external_iliac_L198_module for
        vars l_external_iliac_L198 and l;
        vars E_external_iliac_L198 and E;
        vars r_external_iliac_L198 and r;
    enddef;

    def map between Parameters_Systemic and femoral_L200_module for
        vars l_femoral_L200 and l;
        vars E_femoral_L200 and E;
        vars r_femoral_L200 and r;
    enddef;

    def map between Parameters_Systemic and femoral_L204_module for
        vars l_femoral_L204 and l;
        vars E_femoral_L204 and E;
        vars r_femoral_L204 and r;
    enddef;

    def map between Parameters_Systemic and popliteal_L206_module for
        vars l_popliteal_L206 and l;
        vars E_popliteal_L206 and E;
        vars r_popliteal_L206 and r;
    enddef;

    def map between Parameters_Systemic and popliteal_L210_module for
        vars l_popliteal_L210 and l;
        vars E_popliteal_L210 and E;
        vars r_popliteal_L210 and r;
    enddef;

    def map between Parameters_Systemic and tibiofibular_trunk_L212_module for
        vars l_tibiofibular_trunk_L212 and l;
        vars E_tibiofibular_trunk_L212 and E;
        vars r_tibiofibular_trunk_L212 and r;
    enddef;

    // Upper Limbs

    def map between Parameters_Systemic and subclavian_R28_module for
        vars l_subclavian_R28 and l;
        vars E_subclavian_R28 and E;
        vars r_subclavian_R28 and r;
    enddef;

    def map between Parameters_Systemic and subclavian_R30_module for
        vars l_subclavian_R30 and l;
        vars E_subclavian_R30 and E;
        vars r_subclavian_R30 and r;
    enddef;

    def map between Parameters_Systemic and axillary_R32_module for
        vars l_axillary_R32 and l;
        vars E_axillary_R32 and E;
        vars r_axillary_R32 and r;
    enddef;

    def map between Parameters_Systemic and brachial_R34_module for
        vars l_brachial_R34 and l;
        vars E_brachial_R34 and E;
        vars r_brachial_R34 and r;
    enddef;

    def map between Parameters_Systemic and subclavian_L66_module for
        vars l_subclavian_L66 and l;
        vars E_subclavian_L66 and E;
        vars r_subclavian_L66 and r;
    enddef;

    def map between Parameters_Systemic and subclavian_L78_module for
        vars l_subclavian_L78 and l;
        vars E_subclavian_L78 and E;
        vars r_subclavian_L78 and r;
    enddef;

    def map between Parameters_Systemic and axillary_L80_module for
        vars l_axillary_L80 and l;
        vars E_axillary_L80 and E;
        vars r_axillary_L80 and r;
    enddef;

    def map between Parameters_Systemic and brachial_L82_module for
        vars l_brachial_L82 and l;
        vars E_brachial_L82 and E;
        vars r_brachial_L82 and r;
    enddef;

    // Head		

    def map between Parameters_Systemic and common_carotid_R6_A_module for
        vars l_common_carotid_R6_A and l;
        vars E_common_carotid_R6_A and E;
        vars r_common_carotid_R6_A and r;
    enddef;

    def map between Parameters_Systemic and common_carotid_R6_B_module for
        vars l_common_carotid_R6_B and l;
        vars E_common_carotid_R6_B and E;
        vars r_common_carotid_R6_B and r;
    enddef;

    def map between Parameters_Systemic and common_carotid_R6_C_module for
        vars l_common_carotid_R6_C and l;
        vars E_common_carotid_R6_C and E;
        vars r_common_carotid_R6_C and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_R8_A_module for
        vars l_internal_carotid_R8_A and l;
        vars E_internal_carotid_R8_A and E;
        vars r_internal_carotid_R8_A and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_R8_B_module for
        vars l_internal_carotid_R8_B and l;
        vars E_internal_carotid_R8_B and E;
        vars r_internal_carotid_R8_B and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_R8_C_module for
        vars l_internal_carotid_R8_C and l;
        vars E_internal_carotid_R8_C and E;
        vars r_internal_carotid_R8_C and r;
        vars R_T_internal_carotid_R8_C and R_T;
        vars C_T_internal_carotid_R8_C and C_T;
    enddef;

    def map between Parameters_Systemic and common_carotid_L48_A_module for
        vars l_common_carotid_L48_A and l;
        vars E_common_carotid_L48_A and E;
        vars r_common_carotid_L48_A and r;
    enddef;

    def map between Parameters_Systemic and common_carotid_L48_B_module for
        vars l_common_carotid_L48_B and l;
        vars E_common_carotid_L48_B and E;
        vars r_common_carotid_L48_B and r;
    enddef;

    def map between Parameters_Systemic and common_carotid_L48_C_module for
        vars l_common_carotid_L48_C and l;
        vars E_common_carotid_L48_C and E;
        vars r_common_carotid_L48_C and r;
    enddef;

    def map between Parameters_Systemic and common_carotid_L48_D_module for
        vars l_common_carotid_L48_D and l;
        vars E_common_carotid_L48_D and E;
        vars r_common_carotid_L48_D and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_L50_A_module for
        vars l_internal_carotid_L50_A and l;
        vars E_internal_carotid_L50_A and E;
        vars r_internal_carotid_L50_A and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_L50_B_module for
        vars l_internal_carotid_L50_B and l;
        vars E_internal_carotid_L50_B and E;
        vars r_internal_carotid_L50_B and r;
    enddef;

    def map between Parameters_Systemic and internal_carotid_L50_C_module for
        vars l_internal_carotid_L50_C and l;
        vars E_internal_carotid_L50_C and E;
        vars r_internal_carotid_L50_C and r;
        vars R_T_internal_carotid_L50_C and R_T;
        vars C_T_internal_carotid_L50_C and C_T;
    enddef;

    def map between Parameters_Systemic and vertebral_L2_module for
        vars l_vertebral_L2 and l;
        vars E_vertebral_L2 and E;
        vars r_vertebral_L2 and r;
        vars R_T_vertebral_L2 and R_T;
        vars C_T_vertebral_L2 and C_T;
    enddef;

    def map between Parameters_Systemic and vertebral_R272_module for
        vars l_vertebral_R272 and l;
        vars E_vertebral_R272 and E;
        vars r_vertebral_R272 and r;
        vars R_T_vertebral_R272 and R_T;
        vars C_T_vertebral_R272 and C_T;
    enddef;

    // Terminal

    def map between Parameters_Systemic and internal_iliac_T1_R218_module for
        vars l_internal_iliac_T1_R218 and l;
        vars E_internal_iliac_T1_R218 and E;
        vars r_internal_iliac_T1_R218 and r;
        vars R_T_internal_iliac_T1_R218 and R_T;
        vars C_T_internal_iliac_T1_R218 and C_T;
    enddef;

    def map between Parameters_Systemic and profundus_T2_R224_module for
        vars l_profundus_T2_R224 and l;
        vars E_profundus_T2_R224 and E;
        vars r_profundus_T2_R224 and r;
        vars R_T_profundus_T2_R224 and R_T;
        vars C_T_profundus_T2_R224 and C_T;
    enddef;

    def map between Parameters_Systemic and anterior_tibial_T3_R230_module for
        vars l_anterior_tibial_T3_R230 and l;
        vars E_anterior_tibial_T3_R230 and E;
        vars r_anterior_tibial_T3_R230 and r;
        vars R_T_anterior_tibial_T3_R230 and R_T;
        vars C_T_anterior_tibial_T3_R230 and C_T;
    enddef;

    def map between Parameters_Systemic and posterior_tibial_T4_R236_module for
        vars l_posterior_tibial_T4_R236 and l;
        vars E_posterior_tibial_T4_R236 and E;
        vars r_posterior_tibial_T4_R236 and r;
        vars R_T_posterior_tibial_T4_R236 and R_T;
        vars C_T_posterior_tibial_T4_R236 and C_T;
    enddef;

    def map between Parameters_Systemic and internal_iliac_T1_L196_module for
        vars l_internal_iliac_T1_L196 and l;
        vars E_internal_iliac_T1_L196 and E;
        vars r_internal_iliac_T1_L196 and r;
        vars R_T_internal_iliac_T1_L196 and R_T;
        vars C_T_internal_iliac_T1_L196 and C_T;
    enddef;

    def map between Parameters_Systemic and profundus_T2_L202_module for
        vars l_profundus_T2_L202 and l;
        vars E_profundus_T2_L202 and E;
        vars r_profundus_T2_L202 and r;
        vars R_T_profundus_T2_L202 and R_T;
        vars C_T_profundus_T2_L202 and C_T;
    enddef;

    def map between Parameters_Systemic and anterior_tibial_T3_L208_module for
        vars l_anterior_tibial_T3_L208 and l;
        vars E_anterior_tibial_T3_L208 and E;
        vars r_anterior_tibial_T3_L208 and r;
        vars R_T_anterior_tibial_T3_L208 and R_T;
        vars C_T_anterior_tibial_T3_L208 and C_T;
    enddef;

    def map between Parameters_Systemic and posterior_tibial_T4_L214_module for
        vars l_posterior_tibial_T4_L214 and l;
        vars E_posterior_tibial_T4_L214 and E;
        vars r_posterior_tibial_T4_L214 and r;
        vars R_T_posterior_tibial_T4_L214 and R_T;
        vars C_T_posterior_tibial_T4_L214 and C_T;
    enddef;

    def map between Parameters_Systemic and ulnar_T2_R36_module for
        vars l_ulnar_T2_R36 and l;
        vars E_ulnar_T2_R36 and E;
        vars r_ulnar_T2_R36 and r;
        vars R_T_ulnar_T2_R36 and R_T;
        vars C_T_ulnar_T2_R36 and C_T;
    enddef;

    def map between Parameters_Systemic and radial_T1_R44_module for
        vars l_radial_T1_R44 and l;
        vars E_radial_T1_R44 and E;
        vars r_radial_T1_R44 and r;
        vars R_T_radial_T1_R44 and R_T;
        vars C_T_radial_T1_R44 and C_T;
    enddef;

    def map between Parameters_Systemic and ulnar_T2_L84_module for
        vars l_ulnar_T2_L84 and l;
        vars E_ulnar_T2_L84 and E;
        vars r_ulnar_T2_L84 and r;
        vars R_T_ulnar_T2_L84 and R_T;
        vars C_T_ulnar_T2_L84 and C_T;
    enddef;

    def map between Parameters_Systemic and radial_T1_L92_module for
        vars l_radial_T1_L92 and l;
        vars E_radial_T1_L92 and E;
        vars r_radial_T1_L92 and r;
        vars R_T_radial_T1_L92 and R_T;
        vars C_T_radial_T1_L92 and C_T;
    enddef;

    def map between Parameters_Systemic and external_carotid_T2_R26_module for
        vars l_external_carotid_T2_R26 and l;
        vars E_external_carotid_T2_R26 and E;
        vars r_external_carotid_T2_R26 and r;
        vars R_T_external_carotid_T2_R26 and R_T;
        vars C_T_external_carotid_T2_R26 and C_T;
    enddef;

    def map between Parameters_Systemic and external_carotid_T2_L62_module for
        vars l_external_carotid_T2_L62 and l;
        vars E_external_carotid_T2_L62 and E;
        vars r_external_carotid_T2_L62 and r;
        vars R_T_external_carotid_T2_L62 and R_T;
        vars C_T_external_carotid_T2_L62 and C_T;
    enddef;

    // veins

    def map between Parameters_Venous and superior_vena_cava_C2_module for
        vars l_superior_vena_cava_C2 and l;
        vars E_superior_vena_cava_C2 and E;
        vars r_superior_vena_cava_C2 and r;
    enddef;

    def map between Parameters_Venous and superior_vena_cava_C88_module for
        vars l_superior_vena_cava_C88 and l;
        vars E_superior_vena_cava_C88 and E;
        vars r_superior_vena_cava_C88 and r;
    enddef;

    def map between Parameters_Venous and inferior_vena_cava_C8_module for
        vars l_inferior_vena_cava_C8 and l;
        vars E_inferior_vena_cava_C8 and E;
        vars r_inferior_vena_cava_C8 and r;
    enddef;

    def map between Parameters_Venous and hepatic_vein_T1_C10_module for
        vars l_hepatic_vein_T1_C10 and l;
        vars E_hepatic_vein_T1_C10 and E;
        vars r_hepatic_vein_T1_C10 and r;
    enddef;

    def map between Parameters_Venous and inferior_vena_cava_C12_module for
        vars l_inferior_vena_cava_C12 and l;
        vars E_inferior_vena_cava_C12 and E;
        vars r_inferior_vena_cava_C12 and r;
    enddef;

    def map between Parameters_Venous and inferior_vena_cava_C16_module for
        vars l_inferior_vena_cava_C16 and l;
        vars E_inferior_vena_cava_C16 and E;
        vars r_inferior_vena_cava_C16 and r;
    enddef;

    def map between Parameters_Venous and renal_vein_T1_R18_module for
        vars l_renal_vein_T1_R18 and l;
        vars E_renal_vein_T1_R18 and E;
        vars r_renal_vein_T1_R18 and r;
    enddef;

    def map between Parameters_Venous and inferior_vena_cava_C20_module for
        vars l_inferior_vena_cava_C20 and l;
        vars E_inferior_vena_cava_C20 and E;
        vars r_inferior_vena_cava_C20 and r;
    enddef;

    def map between Parameters_Venous and renal_vein_T1_L22_module for
        vars l_renal_vein_T1_L22 and l;
        vars E_renal_vein_T1_L22 and E;
        vars r_renal_vein_T1_L22 and r;
    enddef;

    def map between Parameters_Venous and inferior_vena_cava_C24_module for
        vars l_inferior_vena_cava_C24 and l;
        vars E_inferior_vena_cava_C24 and E;
        vars r_inferior_vena_cava_C24 and r;
    enddef;

    def map between Parameters_Venous and common_iliac_vein_L56_module for
        vars l_common_iliac_vein_L56 and l;
        vars E_common_iliac_vein_L56 and E;
        vars r_common_iliac_vein_L56 and r;
    enddef;

    def map between Parameters_Venous and common_iliac_vein_R26_module for
        vars l_common_iliac_vein_R26 and l;
        vars E_common_iliac_vein_R26 and E;
        vars r_common_iliac_vein_R26 and r;
    enddef;

    def map between Parameters_Venous and external_iliac_vein_R28_module for
        vars l_external_iliac_vein_R28 and l;
        vars E_external_iliac_vein_R28 and E;
        vars r_external_iliac_vein_R28 and r;
    enddef;

    def map between Parameters_Venous and internal_iliac_vein_T1_R30_module for
        vars l_internal_iliac_vein_T1_R30 and l;
        vars E_internal_iliac_vein_T1_R30 and E;
        vars r_internal_iliac_vein_T1_R30 and r;
    enddef;

    def map between Parameters_Venous and external_iliac_vein_R32_module for
        vars l_external_iliac_vein_R32 and l;
        vars E_external_iliac_vein_R32 and E;
        vars r_external_iliac_vein_R32 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_R34_module for
        vars l_femoral_vein_R34 and l;
        vars E_femoral_vein_R34 and E;
        vars r_femoral_vein_R34 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_R38_module for
        vars l_femoral_vein_R38 and l;
        vars E_femoral_vein_R38 and E;
        vars r_femoral_vein_R38 and r;
    enddef;

    def map between Parameters_Venous and profunda_femoris_vein_T2_R40_module for
        vars l_profunda_femoris_vein_T2_R40 and l;
        vars E_profunda_femoris_vein_T2_R40 and E;
        vars r_profunda_femoris_vein_T2_R40 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_R42_module for
        vars l_femoral_vein_R42 and l;
        vars E_femoral_vein_R42 and E;
        vars r_femoral_vein_R42 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_R46_module for
        vars l_femoral_vein_R46 and l;
        vars E_femoral_vein_R46 and E;
        vars r_femoral_vein_R46 and r;
    enddef;

    def map between Parameters_Venous and popliteal_vein_R48_module for
        vars l_popliteal_vein_R48 and l;
        vars E_popliteal_vein_R48 and E;
        vars r_popliteal_vein_R48 and r;
    enddef;

    def map between Parameters_Venous and anterior_tibial_vein_T4_R50_module for
        vars l_anterior_tibial_vein_T4_R50 and l;
        vars E_anterior_tibial_vein_T4_R50 and E;
        vars r_anterior_tibial_vein_T4_R50 and r;
    enddef;

    def map between Parameters_Venous and popliteal_vein_R52_module for
        vars l_popliteal_vein_R52 and l;
        vars E_popliteal_vein_R52 and E;
        vars r_popliteal_vein_R52 and r;
    enddef;

    def map between Parameters_Venous and posterior_tibial_vein_T6_R54_module for
        vars l_posterior_tibial_vein_T6_R54 and l;
        vars E_posterior_tibial_vein_T6_R54 and E;
        vars r_posterior_tibial_vein_T6_R54 and r;
    enddef;

    def map between Parameters_Venous and external_iliac_vein_L58_module for
        vars l_external_iliac_vein_L58 and l;
        vars E_external_iliac_vein_L58 and E;
        vars r_external_iliac_vein_L58 and r;
    enddef;

    def map between Parameters_Venous and internal_iliac_vein_T1_L60_module for
        vars l_internal_iliac_vein_T1_L60 and l;
        vars E_internal_iliac_vein_T1_L60 and E;
        vars r_internal_iliac_vein_T1_L60 and r;
    enddef;

    def map between Parameters_Venous and external_iliac_vein_L62_module for
        vars l_external_iliac_vein_L62 and l;
        vars E_external_iliac_vein_L62 and E;
        vars r_external_iliac_vein_L62 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_L64_module for
        vars l_femoral_vein_L64 and l;
        vars E_femoral_vein_L64 and E;
        vars r_femoral_vein_L64 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_L68_module for
        vars l_femoral_vein_L68 and l;
        vars E_femoral_vein_L68 and E;
        vars r_femoral_vein_L68 and r;
    enddef;

    def map between Parameters_Venous and profunda_femoris_vein_T2_L70_module for
        vars l_profunda_femoris_vein_T2_L70 and l;
        vars E_profunda_femoris_vein_T2_L70 and E;
        vars r_profunda_femoris_vein_T2_L70 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_L72_module for
        vars l_femoral_vein_L72 and l;
        vars E_femoral_vein_L72 and E;
        vars r_femoral_vein_L72 and r;
    enddef;

    def map between Parameters_Venous and femoral_vein_L76_module for
        vars l_femoral_vein_L76 and l;
        vars E_femoral_vein_L76 and E;
        vars r_femoral_vein_L76 and r;
    enddef;

    def map between Parameters_Venous and popliteal_vein_L78_module for
        vars l_popliteal_vein_L78 and l;
        vars E_popliteal_vein_L78 and E;
        vars r_popliteal_vein_L78 and r;
    enddef;

    def map between Parameters_Venous and anterior_tibial_vein_T4_L80_module for
        vars l_anterior_tibial_vein_T4_L80 and l;
        vars E_anterior_tibial_vein_T4_L80 and E;
        vars r_anterior_tibial_vein_T4_L80 and r;
    enddef;

    def map between Parameters_Venous and popliteal_vein_L82_module for
        vars l_popliteal_vein_L82 and l;
        vars E_popliteal_vein_L82 and E;
        vars r_popliteal_vein_L82 and r;
    enddef;

    def map between Parameters_Venous and posterior_tibial_vein_T6_L84_module for
        vars l_posterior_tibial_vein_T6_L84 and l;
        vars E_posterior_tibial_vein_T6_L84 and E;
        vars r_posterior_tibial_vein_T6_L84 and r;
    enddef;

    def map between Parameters_Venous and brachiocephalic_vein_R90_module for
        vars l_brachiocephalic_vein_R90 and l;
        vars E_brachiocephalic_vein_R90 and E;
        vars r_brachiocephalic_vein_R90 and r;
    enddef;

    def map between Parameters_Venous and brachiocephalic_vein_L124_module for
        vars l_brachiocephalic_vein_L124 and l;
        vars E_brachiocephalic_vein_L124 and E;
        vars r_brachiocephalic_vein_L124 and r;
    enddef;

    def map between Parameters_Venous and vertebral_vein_R92_module for
        vars l_vertebral_vein_R92 and l;
        vars E_vertebral_vein_R92 and E;
        vars r_vertebral_vein_R92 and r;
    enddef;

    def map between Parameters_Venous and brachiocephalic_vein_R94_module for
        vars l_brachiocephalic_vein_R94 and l;
        vars E_brachiocephalic_vein_R94 and E;
        vars r_brachiocephalic_vein_R94 and r;
    enddef;

    def map between Parameters_Venous and subclavian_vein_R96_module for
        vars l_subclavian_vein_R96 and l;
        vars E_subclavian_vein_R96 and E;
        vars r_subclavian_vein_R96 and r;
    enddef;

    def map between Parameters_Venous and internal_jugular_vein_R122_module for
        vars l_internal_jugular_vein_R122 and l;
        vars E_internal_jugular_vein_R122 and E;
        vars r_internal_jugular_vein_R122 and r;
    enddef;

    def map between Parameters_Venous and external_jugular_vein_R98_module for
        vars l_external_jugular_vein_R98 and l;
        vars E_external_jugular_vein_R98 and E;
        vars r_external_jugular_vein_R98 and r;
    enddef;

    def map between Parameters_Venous and subclavian_vein_R100_module for
        vars l_subclavian_vein_R100 and l;
        vars E_subclavian_vein_R100 and E;
        vars r_subclavian_vein_R100 and r;
    enddef;

    def map between Parameters_Venous and axillary_vein_R102_module for
        vars l_axillary_vein_R102 and l;
        vars E_axillary_vein_R102 and E;
        vars r_axillary_vein_R102 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_R104_module for
        vars l_brachial_vein_R104 and l;
        vars E_brachial_vein_R104 and E;
        vars r_brachial_vein_R104 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_R114_module for
        vars l_brachial_vein_R114 and l;
        vars E_brachial_vein_R114 and E;
        vars r_brachial_vein_R114 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_R108_module for
        vars l_brachial_vein_R108 and l;
        vars E_brachial_vein_R108 and E;
        vars r_brachial_vein_R108 and r;
    enddef;

    def map between Parameters_Venous and ulnar_vein_T7_R110_module for
        vars l_ulnar_vein_T7_R110 and l;
        vars E_ulnar_vein_T7_R110 and E;
        vars r_ulnar_vein_T7_R110 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_R118_module for
        vars l_brachial_vein_R118 and l;
        vars E_brachial_vein_R118 and E;
        vars r_brachial_vein_R118 and r;
    enddef;

    def map between Parameters_Venous and radial_vein_T3_R120_module for
        vars l_radial_vein_T3_R120 and l;
        vars E_radial_vein_T3_R120 and E;
        vars r_radial_vein_T3_R120 and r;
    enddef;

    def map between Parameters_Venous and vertebral_vein_L126_module for
        vars l_vertebral_vein_L126 and l;
        vars E_vertebral_vein_L126 and E;
        vars r_vertebral_vein_L126 and r;
    enddef;

    def map between Parameters_Venous and brachiocephalic_vein_L128_module for
        vars l_brachiocephalic_vein_L128 and l;
        vars E_brachiocephalic_vein_L128 and E;
        vars r_brachiocephalic_vein_L128 and r;
    enddef;

    def map between Parameters_Venous and subclavian_vein_L130_module for
        vars l_subclavian_vein_L130 and l;
        vars E_subclavian_vein_L130 and E;
        vars r_subclavian_vein_L130 and r;
    enddef;

    def map between Parameters_Venous and internal_jugular_vein_L156_module for
        vars l_internal_jugular_vein_L156 and l;
        vars E_internal_jugular_vein_L156 and E;
        vars r_internal_jugular_vein_L156 and r;
    enddef;

    def map between Parameters_Venous and external_jugular_vein_L132_module for
        vars l_external_jugular_vein_L132 and l;
        vars E_external_jugular_vein_L132 and E;
        vars r_external_jugular_vein_L132 and r;
    enddef;

    def map between Parameters_Venous and subclavian_vein_L134_module for
        vars l_subclavian_vein_L134 and l;
        vars E_subclavian_vein_L134 and E;
        vars r_subclavian_vein_L134 and r;
    enddef;

    def map between Parameters_Venous and axillary_vein_L136_module for
        vars l_axillary_vein_L136 and l;
        vars E_axillary_vein_L136 and E;
        vars r_axillary_vein_L136 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_L138_module for
        vars l_brachial_vein_L138 and l;
        vars E_brachial_vein_L138 and E;
        vars r_brachial_vein_L138 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_L148_module for
        vars l_brachial_vein_L148 and l;
        vars E_brachial_vein_L148 and E;
        vars r_brachial_vein_L148 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_L142_module for
        vars l_brachial_vein_L142 and l;
        vars E_brachial_vein_L142 and E;
        vars r_brachial_vein_L142 and r;
    enddef;

    def map between Parameters_Venous and ulnar_vein_T7_L144_module for
        vars l_ulnar_vein_T7_L144 and l;
        vars E_ulnar_vein_T7_L144 and E;
        vars r_ulnar_vein_T7_L144 and r;
    enddef;

    def map between Parameters_Venous and brachial_vein_L152_module for
        vars l_brachial_vein_L152 and l;
        vars E_brachial_vein_L152 and E;
        vars r_brachial_vein_L152 and r;
    enddef;

    def map between Parameters_Venous and radial_vein_T3_L154_module for
        vars l_radial_vein_T3_L154 and l;
        vars E_radial_vein_T3_L154 and E;
        vars r_radial_vein_T3_L154 and r;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    ////////////////////////////////////////// XI - Time Mapping ///////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    // Aorta

    def map between Systemic and ascending_aorta_A_module for
        vars u_sas and u_C;
        vars v_aov and v_in;
        vars t and t;
    enddef;

    def map between Systemic and ascending_aorta_B_module for
        vars t and t;
    enddef;

    def map between Systemic and ascending_aorta_C_module for
        vars t and t;
    enddef;

    def map between Systemic and ascending_aorta_D_module for
        vars t and t;
    enddef;

    def map between Systemic and aortic_arch_C2_module for
        vars t and t;
    enddef;

    def map between Systemic and brachiocephalic_trunk_C4_module for
        vars t and t;
    enddef;

    def map between Systemic and aortic_arch_C46_module for
        vars t and t;
    enddef;

    def map between Systemic and aortic_arch_C64_module for
        vars t and t;
    enddef;

    def map between Systemic and aortic_arch_C94_module for
        vars t and t;
    enddef;

    def map between Systemic and thoracic_aorta_C96_module for
        vars t and t;
    enddef;

    def map between Systemic and thoracic_aorta_C100_module for
        vars t and t;
    enddef;

    def map between Systemic and thoracic_aorta_C104_module for
        vars t and t;
    enddef;

    def map between Systemic and thoracic_aorta_C108_module for
        vars t and t;
    enddef;

    def map between Systemic and thoracic_aorta_C112_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C114_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C136_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C164_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C176_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C188_module for
        vars t and t;
    enddef;

    def map between Systemic and abdominal_aorta_C192_module for
        vars t and t;
    enddef;

    // Lower Limbs

    def map between Systemic and common_iliac_R216_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_R220_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_R222_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_R226_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_R228_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_R232_module for
        vars t and t;
    enddef;

    def map between Systemic and tibiofibular_trunk_R234_module for
        vars t and t;
    enddef;

    def map between Systemic and common_iliac_L194_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_L198_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_L200_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_L204_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_L206_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_L210_module for
        vars t and t;
    enddef;

    def map between Systemic and tibiofibular_trunk_L212_module for
        vars t and t;
    enddef;

    // Upper Limbs

    def map between Systemic and subclavian_R28_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_R30_module for
        vars t and t;
    enddef;

    def map between Systemic and axillary_R32_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_R34_module for
        vars t and t;
    enddef;

    def map between Systemic and ulnar_T2_R36_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_L66_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_L78_module for
        vars t and t;
    enddef;

    def map between Systemic and axillary_L80_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_L82_module for
        vars t and t;
    enddef;

    def map between Systemic and ulnar_T2_L84_module for
        vars t and t;
    enddef;

    // Head

    def map between Systemic and common_carotid_R6_A_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_R6_B_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_R6_C_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_R8_A_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_R8_B_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_L48_A_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_L48_B_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_L48_C_module for
        vars t and t;
    enddef;

    def map between Systemic and common_carotid_L48_D_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_L50_A_module for
        vars t and t;
    enddef;

    def map between Systemic and internal_carotid_L50_B_module for
        vars t and t;
    enddef;

    // Vein

    def map between Systemic and superior_vena_cava_C2_module for
        vars u_ra and u_out;
        vars v_sup_venacava and v;
        vars t and t;
    enddef;

    def map between Systemic and superior_vena_cava_C88_module for
        vars t and t;
    enddef;

    def map between Systemic and inferior_vena_cava_C8_module for
        vars u_ra and u_out;
        vars v_inf_venacava and v;
        vars t and t;
    enddef;

    def map between Systemic and inferior_vena_cava_C12_module for
        vars t and t;
    enddef;

    def map between Systemic and inferior_vena_cava_C16_module for
        vars t and t;
    enddef;

    def map between Systemic and inferior_vena_cava_C20_module for
        vars t and t;
    enddef;

    def map between Systemic and inferior_vena_cava_C24_module for
        vars t and t;
    enddef;

    def map between Systemic and common_iliac_vein_R26_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_vein_R28_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_vein_R32_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_R34_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_R38_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_R42_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_R46_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_vein_R48_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_vein_R52_module for
        vars t and t;
    enddef;

    def map between Systemic and common_iliac_vein_L56_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_vein_L58_module for
        vars t and t;
    enddef;

    def map between Systemic and external_iliac_vein_L62_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_L64_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_L68_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_L72_module for
        vars t and t;
    enddef;

    def map between Systemic and femoral_vein_L76_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_vein_L78_module for
        vars t and t;
    enddef;

    def map between Systemic and popliteal_vein_L82_module for
        vars t and t;
    enddef;

    def map between Systemic and brachiocephalic_vein_R90_module for
        vars t and t;
    enddef;

    def map between Systemic and brachiocephalic_vein_R94_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_vein_R96_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_vein_R100_module for
        vars t and t;
    enddef;

    def map between Systemic and axillary_vein_R102_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_R104_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_R108_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_R114_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_R118_module for
        vars t and t;
    enddef;

    def map between Systemic and brachiocephalic_vein_L124_module for
        vars t and t;
    enddef;

    def map between Systemic and brachiocephalic_vein_L128_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_vein_L130_module for
        vars t and t;
    enddef;

    def map between Systemic and subclavian_vein_L134_module for
        vars t and t;
    enddef;

    def map between Systemic and axillary_vein_L136_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_L138_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_L142_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_L148_module for
        vars t and t;
    enddef;

    def map between Systemic and brachial_vein_L152_module for
        vars t and t;
    enddef;

    ////////////////////////////////////////////////////////////////////////////////////////////////////////
    ///////////////////////////////////////// XII - Encapsulation //////////////////////////////////////////
    ////////////////////////////////////////////////////////////////////////////////////////////////////////

    def group as encapsulation for
        comp Heart incl
            comp Parameters_Heart;
        endcomp;
    enddef;

    def group as encapsulation for
        comp Pulmonary incl
            comp Parameters_Pulmonary;
        endcomp;
    enddef;

    def group as encapsulation for
        comp Systemic incl
            comp Parameters_Systemic;
            comp ascending_aorta_A_module;
            comp ascending_aorta_B_module;
            comp ascending_aorta_C_module;
            comp ascending_aorta_D_module;
            comp aortic_arch_C2_module;
            comp brachiocephalic_trunk_C4_module;
            comp aortic_arch_C46_module;
            comp aortic_arch_C64_module;
            comp aortic_arch_C94_module;
            comp thoracic_aorta_C96_module;
            comp thoracic_aorta_C100_module;
            comp thoracic_aorta_C104_module;
            comp thoracic_aorta_C108_module;
            comp thoracic_aorta_C112_module;
            comp abdominal_aorta_C114_module;
            comp abdominal_aorta_C136_module;
            comp abdominal_aorta_C164_module;
            comp abdominal_aorta_C176_module;
            comp abdominal_aorta_C188_module;
            comp abdominal_aorta_C192_module;
            comp celiac_trunk_C116_module;
            comp renal_L166_module;
            comp renal_R178_module;
            comp common_iliac_R216_module;
            comp internal_iliac_T1_R218_module;
            comp external_iliac_R220_module;
            comp femoral_R222_module;
            comp profundus_T2_R224_module;
            comp femoral_R226_module;
            comp popliteal_R228_module;
            comp anterior_tibial_T3_R230_module;
            comp popliteal_R232_module;
            comp tibiofibular_trunk_R234_module;
            comp posterior_tibial_T4_R236_module;
            comp common_iliac_L194_module;
            comp internal_iliac_T1_L196_module;
            comp external_iliac_L198_module;
            comp femoral_L200_module;
            comp profundus_T2_L202_module;
            comp femoral_L204_module;
            comp popliteal_L206_module;
            comp anterior_tibial_T3_L208_module;
            comp popliteal_L210_module;
            comp tibiofibular_trunk_L212_module;
            comp posterior_tibial_T4_L214_module;
            comp subclavian_R28_module;
            comp subclavian_R30_module;
            comp axillary_R32_module;
            comp brachial_R34_module;
            comp ulnar_T2_R36_module;
            comp radial_T1_R44_module;
            comp subclavian_L66_module;
            comp subclavian_L78_module;
            comp axillary_L80_module;
            comp brachial_L82_module;
            comp ulnar_T2_L84_module;
            comp radial_T1_L92_module;
            comp common_carotid_R6_A_module;
            comp common_carotid_R6_B_module;
            comp common_carotid_R6_C_module;
            comp internal_carotid_R8_A_module;
            comp internal_carotid_R8_B_module;
            comp internal_carotid_R8_C_module;
            comp external_carotid_T2_R26_module;
            comp common_carotid_L48_A_module;
            comp common_carotid_L48_B_module;
            comp common_carotid_L48_C_module;
            comp common_carotid_L48_D_module;
            comp internal_carotid_L50_A_module;
            comp internal_carotid_L50_B_module;
            comp internal_carotid_L50_C_module;
            comp external_carotid_T2_L62_module;
            comp vertebral_L2_module;
            comp vertebral_R272_module;
            comp superior_vena_cava_C2_module;
            comp superior_vena_cava_C88_module;
            comp inferior_vena_cava_C8_module;
            comp hepatic_vein_T1_C10_module;
            comp inferior_vena_cava_C12_module;
            comp inferior_vena_cava_C16_module;
            comp renal_vein_T1_R18_module;
            comp inferior_vena_cava_C20_module;
            comp renal_vein_T1_L22_module;
            comp inferior_vena_cava_C24_module;
            comp common_iliac_vein_L56_module;
            comp common_iliac_vein_R26_module;
            comp external_iliac_vein_R28_module;
            comp internal_iliac_vein_T1_R30_module;
            comp external_iliac_vein_R32_module;
            comp femoral_vein_R34_module;
            comp femoral_vein_R38_module;
            comp profunda_femoris_vein_T2_R40_module;
            comp femoral_vein_R42_module;
            comp femoral_vein_R46_module;
            comp popliteal_vein_R48_module;
            comp anterior_tibial_vein_T4_R50_module;
            comp popliteal_vein_R52_module;
            comp posterior_tibial_vein_T6_R54_module;
            comp external_iliac_vein_L58_module;
            comp internal_iliac_vein_T1_L60_module;
            comp external_iliac_vein_L62_module;
            comp femoral_vein_L64_module;
            comp femoral_vein_L68_module;
            comp profunda_femoris_vein_T2_L70_module;
            comp femoral_vein_L72_module;
            comp femoral_vein_L76_module;
            comp popliteal_vein_L78_module;
            comp anterior_tibial_vein_T4_L80_module;
            comp popliteal_vein_L82_module;
            comp posterior_tibial_vein_T6_L84_module;
            comp brachiocephalic_vein_R90_module;
            comp brachiocephalic_vein_L124_module;
            comp vertebral_vein_R92_module;
            comp brachiocephalic_vein_R94_module;
            comp subclavian_vein_R96_module;
            comp internal_jugular_vein_R122_module;
            comp external_jugular_vein_R98_module;
            comp subclavian_vein_R100_module;
            comp axillary_vein_R102_module;
            comp brachial_vein_R104_module;
            comp brachial_vein_R114_module;
            comp brachial_vein_R108_module;
            comp ulnar_vein_T7_R110_module;
            comp brachial_vein_R118_module;
            comp radial_vein_T3_R120_module;
            comp vertebral_vein_L126_module;
            comp brachiocephalic_vein_L128_module;
            comp subclavian_vein_L130_module;
            comp internal_jugular_vein_L156_module;
            comp external_jugular_vein_L132_module;
            comp subclavian_vein_L134_module;
            comp axillary_vein_L136_module;
            comp brachial_vein_L138_module;
            comp brachial_vein_L148_module;
            comp brachial_vein_L142_module;
            comp ulnar_vein_T7_L144_module;
            comp brachial_vein_L152_module;
            comp radial_vein_T3_L154_module;
            comp ascending_aorta_A;
            comp ascending_aorta_B;
            comp ascending_aorta_C;
            comp ascending_aorta_D;
            comp aortic_arch_C2;
            comp brachiocephalic_trunk_C4;
            comp aortic_arch_C46;
            comp aortic_arch_C64;
            comp aortic_arch_C94;
            comp thoracic_aorta_C96;
            comp thoracic_aorta_C100;
            comp thoracic_aorta_C104;
            comp thoracic_aorta_C108;
            comp thoracic_aorta_C112;
            comp abdominal_aorta_C114;
            comp abdominal_aorta_C136;
            comp abdominal_aorta_C164;
            comp abdominal_aorta_C176;
            comp abdominal_aorta_C188;
            comp abdominal_aorta_C192;
            comp celiac_trunk_C116;
            comp renal_L166;
            comp renal_R178;
            comp common_iliac_R216;
            comp internal_iliac_T1_R218;
            comp external_iliac_R220;
            comp femoral_R222;
            comp profundus_T2_R224;
            comp femoral_R226;
            comp popliteal_R228;
            comp anterior_tibial_T3_R230;
            comp popliteal_R232;
            comp tibiofibular_trunk_R234;
            comp posterior_tibial_T4_R236;
            comp common_iliac_L194;
            comp internal_iliac_T1_L196;
            comp external_iliac_L198;
            comp femoral_L200;
            comp profundus_T2_L202;
            comp femoral_L204;
            comp popliteal_L206;
            comp anterior_tibial_T3_L208;
            comp popliteal_L210;
            comp tibiofibular_trunk_L212;
            comp posterior_tibial_T4_L214;
            comp subclavian_R28;
            comp subclavian_R30;
            comp axillary_R32;
            comp brachial_R34;
            comp ulnar_T2_R36;
            comp radial_T1_R44;
            comp subclavian_L66;
            comp subclavian_L78;
            comp axillary_L80;
            comp brachial_L82;
            comp ulnar_T2_L84;
            comp radial_T1_L92;
            comp common_carotid_R6_A;
            comp common_carotid_R6_B;
            comp common_carotid_R6_C;
            comp internal_carotid_R8_A;
            comp internal_carotid_R8_B;
            comp internal_carotid_R8_C;
            comp external_carotid_T2_R26;
            comp common_carotid_L48_A;
            comp common_carotid_L48_B;
            comp common_carotid_L48_C;
            comp common_carotid_L48_D;
            comp internal_carotid_L50_A;
            comp internal_carotid_L50_B;
            comp internal_carotid_L50_C;
            comp external_carotid_T2_L62;
            comp vertebral_L2;
            comp vertebral_R272;
            comp Parameters_Venous;
            comp superior_vena_cava_C2;
            comp superior_vena_cava_C88;
            comp inferior_vena_cava_C8;
            comp hepatic_vein_T1_C10;
            comp inferior_vena_cava_C12;
            comp inferior_vena_cava_C16;
            comp renal_vein_T1_R18;
            comp inferior_vena_cava_C20;
            comp renal_vein_T1_L22;
            comp inferior_vena_cava_C24;
            comp common_iliac_vein_L56;
            comp common_iliac_vein_R26;
            comp external_iliac_vein_R28;
            comp internal_iliac_vein_T1_R30;
            comp external_iliac_vein_R32;
            comp femoral_vein_R34;
            comp femoral_vein_R38;
            comp profunda_femoris_vein_T2_R40;
            comp femoral_vein_R42;
            comp femoral_vein_R46;
            comp popliteal_vein_R48;
            comp anterior_tibial_vein_T4_R50;
            comp popliteal_vein_R52;
            comp posterior_tibial_vein_T6_R54;
            comp external_iliac_vein_L58;
            comp internal_iliac_vein_T1_L60;
            comp external_iliac_vein_L62;
            comp femoral_vein_L64;
            comp femoral_vein_L68;
            comp profunda_femoris_vein_T2_L70;
            comp femoral_vein_L72;
            comp femoral_vein_L76;
            comp popliteal_vein_L78;
            comp anterior_tibial_vein_T4_L80;
            comp popliteal_vein_L82;
            comp posterior_tibial_vein_T6_L84;
            comp brachiocephalic_vein_R90;
            comp brachiocephalic_vein_L124;
            comp vertebral_vein_R92;
            comp brachiocephalic_vein_R94;
            comp subclavian_vein_R96;
            comp internal_jugular_vein_R122;
            comp external_jugular_vein_R98;
            comp subclavian_vein_R100;
            comp axillary_vein_R102;
            comp brachial_vein_R104;
            comp brachial_vein_R114;
            comp brachial_vein_R108;
            comp ulnar_vein_T7_R110;
            comp brachial_vein_R118;
            comp radial_vein_T3_R120;
            comp vertebral_vein_L126;
            comp brachiocephalic_vein_L128;
            comp subclavian_vein_L130;
            comp internal_jugular_vein_L156;
            comp external_jugular_vein_L132;
            comp subclavian_vein_L134;
            comp axillary_vein_L136;
            comp brachial_vein_L138;
            comp brachial_vein_L148;
            comp brachial_vein_L142;
            comp ulnar_vein_T7_L144;
            comp brachial_vein_L152;
            comp radial_vein_T3_L154;
        endcomp;
    enddef;
enddef;
